PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Experiment info = {'participant': '', 'session': '001'}
  Units = height
  Window size (pixels) = [1536, 864]
  Full-screen window = True
  expName = Test
  Screen = 1
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Routines
  Routine trial
    ImageComponent ChoicePic
      image [set every repeat] = $Choice
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      size [set every repeat] = (1.3, 0.9)
      opacity [set every repeat] = 1
      stopVal [duration (s)] = 4
      ori [set every repeat] = 0
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  Routine Choice2Gain
    TextComponent blank
      color [set every repeat] = $[-1.000,-1.000,-1.000]
      text [set every repeat] = I
      stopVal [duration (s)] = 3
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.01
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    ImageComponent ChoicePic2
      image [set every repeat] = $Choice2
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      size [set every repeat] = (1.3, 0.9)
      opacity [set every repeat] = 1
      stopVal [duration (s)] = 3
      ori [set every repeat] = 0
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    KeyboardComponent resp
      stopVal [duration (s)] = 3
      forceEndRoutine = False
      allowedKeys [set every repeat] = 'left','right'
      startVal [time (s)] = 0.0
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    ImageComponent checkL1
      opacity [set every repeat] = 1
      color [set every repeat] = $[1,1,1]
      stopVal [duration (s)] = 1
      mask [set every repeat] = None
      pos [set every repeat] = (0, 0)
      ori [set every repeat] = 0
      startVal [condition] = resp.keys == 'left'
      image [set every repeat] = check2.png
      size [set every repeat] = (2, 1)
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    ImageComponent checkR1
      opacity [set every repeat] = 1
      color [set every repeat] = $[1,1,1]
      stopVal [duration (s)] = 1
      mask [set every repeat] = None
      pos [set every repeat] = (0, 0)
      ori [set every repeat] = 0
      startVal [condition] = resp.keys == 'right'
      image [set every repeat] = check3.png
      size [set every repeat] = (2, 1)
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    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        from PIL import Image
        from psychopy import visual, core
      End Routine:
        checkL1.autoLog=False
        checkR1.autoLog=False



        if resp.keys == 'left':
            checkL1.autoDraw=True

        #elif resp.keys == 'right':
         #   checkR1.autoDraw=False

        if resp.keys =='right':
            checkR1.autoDraw=True


        if blank.status == FINISHED:
            checkR1.autoDraw=False
            checkL1.autoDraw=False
            #win.flip()
        #elif resp.keys == 'left':
         #   checkL1.autoDraw=False


        #clock = core.Clock()
        #while clock.getTime() < 2.0:
         #   if 0.5 <= clock.getTime() < 1.0:
          #      if checkL1.autoDraw==True:
           #         checkL1.setPhase (0.1, '+')
            #    elif checkR1.autoDraw==True:
             #       checkR1.setPhase(0.1, '+')
            #win.flip()
      Each Frame:
        checkL1.autoLog=False
        checkR1.autoLog=False


        if resp.keys == 'left':
            checkL1.autoDraw=True

        #elif resp.keys == 'right':
         #   checkR1.autoDraw=False

        if resp.keys == 'right':
            checkR1.autoDraw=True


        if blank.status == FINISHED:
            checkR1.autoDraw=False
            checkL1.autoDraw=False
            continueRoutine=False
            #win.flip()


            #elif resp.keys == 'left':
         #   checkL1.autoDraw=False

        #clock = core.Clock()
        #while clock.getTime() < 2.0:
        #    if 0.5 <= clock.getTime() < 1.0:
         #       if checkL1.autoDraw==True:
          #          checkL1.setPhase(0.1, '+')
           #     elif checkR1.autoDraw==True:
            #        checkR1.setPhase(0.1, '+')
            #win.flip()
  Routine ISI
    TextComponent iSi
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text = +
      stopVal [duration (s)] = 3
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  Routine askAd
    TextComponent text_3
      pos = (0, -0.2)
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text = Y                 N
      stopVal [condition] = Advice.status==STARTED
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    TextComponent ask
      pos = (0, 0.11)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Would you like to hear advice from your financial advisor?
      stopVal [condition] = Advice.status==STARTED
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    KeyboardComponent response
      stopVal [duration (s)] = 4
      forceEndRoutine = False
      allowedKeys = 'y','n'
      startVal [time (s)] = 0
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        #advice = []

        #if key_resp_3.keys == 'left'
        #    advice = 'Advisor 1 says:', $AdviceVar


        #if key_resp_3.keys == 'right'
        #    advice = 'Advisor 2 says:', $AdviceVar
      End Routine:
        if response.keys == 'y':
            continueRoutine = True
        elif response.keys == 'n':
            continueRoutine = False
      Each Frame:
        if response.keys == 'y':
            continueRoutine = True
        elif response.keys == 'n':
            continueRoutine = False
    TextComponent Advice
      color [set every repeat] = white
      pos [set every repeat] = (0, 0)
      letterHeight [set every repeat] = 0.08
      startVal [condition] = response.keys=='y'
      font [set every repeat] = Arial
      text [set every repeat] = $AdviceVar
      stopVal [duration (s)] = 3
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  Routine preBlock
    TextComponent chooseInst
      text = Please choose which person you would want to receive financial advice from, and then press enter.
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    TextComponent AdX
      pos = (-0.4, -0.05)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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      text:
          Advisor X: (Left Arrow)








        Adelphi University MBA student,
        interning at Chase Bank
    TextComponent AdY
      pos = (0.4, -0.05)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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      text:
        Advisor Y: (Right arrow)








        Adelphi University
        undergraduate biology major
    KeyboardComponent key_resp_3
      forceEndRoutine = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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    ImageComponent AdXpic
      pos = (-.4, -0.06)
      startVal [time (s)] = 0.0
      image = avatar_1.png
      size = (0.3, 0.3)
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    ImageComponent AdYpic
      pos = (.4, -0.06)
      startVal [time (s)] = 0.0
      image = avatar_2.png
      size = (0.3, 0.3)
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    CodeComponent code_6
      Begin Routine:
        border_right = visual.Circle(win,radius = 0.38, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (0.4, -0.09), opacity = 1, lineWidth = 5.0)
        border_left = visual.Circle(win,radius = 0.38, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (-0.4, -0.09), opacity = 1, lineWidth = 5.0)
      End Routine:
        if chooseInst.status == FINISHED:
            border_right.autoDraw = False
            border_left.autoDraw = False
      Each Frame:
        if key_resp_3.keys == 'left':
            border_left.autoDraw=True

        if key_resp_3.keys =='right':
            border_right.autoDraw=True

        if chooseInst.status == FINISHED:
            border_right.autoDraw = False
            border_left.autoDraw = False
    KeyboardComponent enter
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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  Routine inst
    TextComponent instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Welcome to the experiment!

        On the following page you will be instructed to choose an advisor.

        Press the space bar when you are ready to proceed.
    KeyboardComponent space
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Receive_money
    ImageComponent receiveMoneyPicture
      opacity [set every repeat] = 1
      stopVal [duration (s)] = 2
      pos [set every repeat] = (0, -0.05)
      ori [set every repeat] = 0
      startVal [time (s)] = 0.0
      image [set every repeat] = $Amount
      size [set every repeat] = (1.5, 1.1)
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    TextComponent ISI2
      color [set every repeat] = white
      pos [set every repeat] = (0, 0)
      letterHeight [set every repeat] = 0.08
      startVal [time (s)] = 2
      font [set every repeat] = Arial
      text [set every repeat] = +
      stopVal [duration (s)] = 2
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Flow
  Routine inst
  Routine preBlock
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'Amount': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50.bmp', 'Choice2': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G10.bmp', 'AdviceVar': u'Advisor 1 says:\n\n"Go with the safe option here!"', 'Choice': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G10.bmp'},
      {'Amount': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50.bmp', 'Choice2': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G20.bmp', 'AdviceVar': u'Advisor 1 says:\n\n"Let\'s take a risk!"', 'Choice': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G20.bmp'},
      {'Amount': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50.bmp', 'Choice2': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G30.bmp', 'AdviceVar': u'Advisor 1 says:\n\n"I think you should gamble."', 'Choice': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G30.bmp'},
      {'Amount': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50.bmp', 'Choice2': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G40.bmp', 'AdviceVar': u'Advisor 1 says:\n\n"It would probably be best to play it safe."', 'Choice': u'C:\\Users\\farerilab\\Downloads\\GamblingAdviceTask\\IA50_G40.bmp'}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
    Routine ISI
    Routine Receive_money
    Routine trial
    Routine askAd
    Routine Choice2Gain
  LoopTerminator trials
